PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = TEAS
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Routines
  Routine trial
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $film
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press any key to begin TEAS induction.
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press any key to end TEAS experiment.
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  Routine instructions
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('film', 'raindrops.mp4')]),
      OrderedDict([('film', 'turtle.mov')])]
    Routine trial
  LoopTerminator trials
  Routine end
